<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
        <Left>-90</Left>
        <Right>90</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DrawStimulus</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width>2048</Width>
        <Height>2048</Height>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewingWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0</X>
        <Y>0</Y>
        <Width>1</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimulus</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>-30</LocationX>
        <LocationY>0</LocationY>
        <Angle>0</Angle>
        <SpatialFrequency>0.2</SpatialFrequency>
        <TemporalFrequency>0.5</TemporalFrequency>
        <Phase>0</Phase>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
        <ExtentX>30</ExtentX>
        <ExtentY>30</ExtentY>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>