<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF" xmlns:q4="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp" xmlns:q1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="IR_VideoFileName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="IR_TimestampsFileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:PylonCapture">
          <q1:SerialNumber>22657050</q1:SerialNumber>
          <q1:ParameterFile>sync to optitrack acA2040-55um_22657050.pfs</q1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>D:\data\tracking\IR_video.avi</q2:FileName>
          <q2:Suffix>FileCount</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>60</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.Ticks</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:Device">
          <q4:PortName>COM4</q4:PortName>
          <q4:DeviceState>Active</q4:DeviceState>
          <q4:DumpRegisters>true</q4:DumpRegisters>
          <q4:LedState>On</q4:LedState>
          <q4:VisualIndicators>On</q4:VisualIndicators>
          <q4:Heartbeat>Disable</q4:Heartbeat>
          <q4:IgnoreErrors>false</q4:IgnoreErrors>
        </Combinator>
      </Expression>
      <Expression xsi:type="q5:WearEvent">
        <q5:Type>Acquiring</q5:Type>
      </Expression>
      <Expression xsi:type="TakeWhile">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="RGB_VideoFileName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="RGB_TimestampsFileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:PylonCapture">
          <q1:SerialNumber>22370143</q1:SerialNumber>
          <q1:ParameterFile>COLOR RGB8 sync to optitrack acA2040-55uc_22657050.pfs</q1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Resize">
          <q2:Size>
            <q2:Width>337</q2:Width>
            <q2:Height>337</q2:Height>
          </q2:Size>
          <q2:Interpolation>Linear</q2:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>D:\data\tracking\RGB_video.avi</q2:FileName>
          <q2:Suffix>FileCount</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.Ticks</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>GrabResult.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>D:\data\tracking\RGB_timestamps.ssv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>true</q3:Overwrite>
        <q3:Suffix>FileCount</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:CompatibilityMode>true</q3:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="q5:WearEvent">
        <q5:Type>DigitalInput0</q5:Type>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.Ticks</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="2p_IR_TimestampsFileName" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>D:\data\tracking\2p_IR_timestamps.ssv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>true</q3:Overwrite>
        <q3:Suffix>FileCount</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:CompatibilityMode>true</q3:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>GrabResult.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>D:\data\tracking\IR_timestamps.ssv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>true</q3:Overwrite>
        <q3:Suffix>FileCount</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:CompatibilityMode>true</q3:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="6" Label="Source2" />
      <Edge From="1" To="41" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="39" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="14" Label="Source1" />
      <Edge From="7" To="40" Label="Source1" />
      <Edge From="7" To="35" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="32" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="9" To="15" Label="Source1" />
      <Edge From="9" To="25" Label="Source1" />
      <Edge From="9" To="31" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="42" Label="Source2" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="15" To="24" Label="Source2" />
      <Edge From="16" To="23" Label="Source2" />
      <Edge From="17" To="29" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="27" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="21" To="26" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="30" Label="Source2" />
      <Edge From="26" To="28" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="38" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.TakeWhileBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Harp.CF.WearEvent, Bonsai.Harp.CF, Version=1.6.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Harp.Device, Bonsai.Harp, Version=3.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Pylon.PylonCapture, Bonsai.Pylon, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Resize, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>