<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q7="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q4="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns:q6="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp" xmlns:q1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="IR_VideoFileName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="IR_Track_TimestampsFileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:PylonCapture">
          <q1:SerialNumber>22657050</q1:SerialNumber>
          <q1:ParameterFile>sync to optitrack acA2040-55um_22657050.pfs</q1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>D:\data\tracking\IR_video.avi</q2:FileName>
          <q2:Suffix>FileCount</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>60</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Threshold">
          <q2:ThresholdValue>40</q2:ThresholdValue>
          <q2:MaxValue>255</q2:MaxValue>
          <q2:ThresholdType>BinaryInv</q2:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:MaskPolygon">
          <q2:Regions>
            <q2:ArrayOfPoint>
              <q2:Point>
                <q2:X>77</q2:X>
                <q2:Y>460</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>41</q2:X>
                <q2:Y>394</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>36</q2:X>
                <q2:Y>315</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>41</q2:X>
                <q2:Y>226</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>69</q2:X>
                <q2:Y>161</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>114</q2:X>
                <q2:Y>105</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>154</q2:X>
                <q2:Y>64</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>205</q2:X>
                <q2:Y>35</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>264</q2:X>
                <q2:Y>17</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>326</q2:X>
                <q2:Y>12</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>387</q2:X>
                <q2:Y>14</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>447</q2:X>
                <q2:Y>34</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>492</q2:X>
                <q2:Y>55</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>535</q2:X>
                <q2:Y>89</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>571</q2:X>
                <q2:Y>128</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>599</q2:X>
                <q2:Y>165</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>626</q2:X>
                <q2:Y>231</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>630</q2:X>
                <q2:Y>292</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>618</q2:X>
                <q2:Y>379</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>584</q2:X>
                <q2:Y>447</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>546</q2:X>
                <q2:Y>495</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>484</q2:X>
                <q2:Y>541</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>416</q2:X>
                <q2:Y>572</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>340</q2:X>
                <q2:Y>584</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>242</q2:X>
                <q2:Y>576</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>173</q2:X>
                <q2:Y>551</q2:Y>
              </q2:Point>
              <q2:Point>
                <q2:X>127</q2:X>
                <q2:Y>511</q2:Y>
              </q2:Point>
            </q2:ArrayOfPoint>
          </q2:Regions>
          <q2:MaskType>ToZero</q2:MaskType>
          <q2:FillValue>
            <q2:Val0>0</q2:Val0>
            <q2:Val1>0</q2:Val1>
            <q2:Val2>0</q2:Val2>
            <q2:Val3>0</q2:Val3>
          </q2:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FindContours">
          <q2:Mode>ConnectedComponent</q2:Mode>
          <q2:Method>ChainApproxNone</q2:Method>
          <q2:Offset>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:Offset>
          <q2:MinArea>300</q2:MinArea>
          <q2:MaxArea>3000</q2:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="q3:PythonTransform">
        <q3:Script>from System import Math, Single

@returns(int)
def process(value):
  if Single.IsNaN(value):
    return 0
  return value * 10</q3:Script>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="q3:PythonTransform">
        <q3:Script>from System import Math, Single

@returns(int)
def process(value):
  if Single.IsNaN(value):
    return 0
  return value * 10</q3:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q4:SendMessage">
        <q4:Connection>StimPC</q4:Connection>
        <q4:Address>/</q4:Address>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>GrabResult.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>D:\data\tracking\IR_Track_timestamps.ssv</q5:FileName>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>true</q5:Overwrite>
        <q5:Suffix>FileCount</q5:Suffix>
        <q5:IncludeHeader>false</q5:IncludeHeader>
        <q5:CompatibilityMode>true</q5:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q6:Device">
          <q6:PortName>COM4</q6:PortName>
          <q6:DeviceState>Active</q6:DeviceState>
          <q6:DumpRegisters>true</q6:DumpRegisters>
          <q6:LedState>On</q6:LedState>
          <q6:VisualIndicators>On</q6:VisualIndicators>
          <q6:Heartbeat>Disable</q6:Heartbeat>
          <q6:IgnoreErrors>false</q6:IgnoreErrors>
        </Combinator>
      </Expression>
      <Expression xsi:type="q7:WearEvent">
        <q7:Type>Acquiring</q7:Type>
      </Expression>
      <Expression xsi:type="TakeWhile">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="RGB_VideoFileName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="RGB_TimestampsFileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:PylonCapture">
          <q1:SerialNumber>22370143</q1:SerialNumber>
          <q1:ParameterFile>COLOR sync to optitrack acA2040-55uc_22657050.pfs</q1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Resize">
          <q2:Size>
            <q2:Width>337</q2:Width>
            <q2:Height>337</q2:Height>
          </q2:Size>
          <q2:Interpolation>Linear</q2:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>D:\data\tracking\RGB_video.avi</q2:FileName>
          <q2:Suffix>FileCount</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>GrabResult.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>D:\data\tracking\RGB_timestamps.ssv</q5:FileName>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>true</q5:Overwrite>
        <q5:Suffix>FileCount</q5:Suffix>
        <q5:IncludeHeader>false</q5:IncludeHeader>
        <q5:CompatibilityMode>true</q5:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="q7:WearEvent">
        <q7:Type>DigitalInput0</q7:Type>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="2p_IR_TimestampsFileName" />
      </Expression>
      <Expression xsi:type="q5:CsvWriter">
        <q5:FileName>D:\data\tracking\2p_IR_timestamps.ssv</q5:FileName>
        <q5:Append>false</q5:Append>
        <q5:Overwrite>true</q5:Overwrite>
        <q5:Suffix>FileCount</q5:Suffix>
        <q5:IncludeHeader>false</q5:IncludeHeader>
        <q5:CompatibilityMode>true</q5:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="6" Label="Source2" />
      <Edge From="1" To="22" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="20" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="30" Label="Source1" />
      <Edge From="7" To="21" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="21" Label="Source3" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="20" To="50" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="28" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="48" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="27" Label="Source1" />
      <Edge From="24" To="29" Label="Source1" />
      <Edge From="24" To="31" Label="Source1" />
      <Edge From="24" To="41" Label="Source1" />
      <Edge From="24" To="47" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="31" To="40" Label="Source2" />
      <Edge From="32" To="39" Label="Source2" />
      <Edge From="33" To="45" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="43" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="42" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="46" Label="Source2" />
      <Edge From="42" To="44" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="47" To="53" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="52" Label="Source1" />
      <Edge From="51" To="52" Label="Source2" />
      <Edge From="52" To="53" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.TakeWhileBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Harp.CF.WearEvent, Bonsai.Harp.CF, Version=1.6.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Harp.Device, Bonsai.Harp, Version=3.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.SendMessage, Bonsai.Osc, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Pylon.PylonCapture, Bonsai.Pylon, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.MaskPolygon, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Resize, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>