<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q4="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns:q1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:PylonCapture">
          <q1:SerialNumber>22657050</q1:SerialNumber>
          <q1:ParameterFile>C:\code\mini2p_AUX---tracking\Bonsai\sync to optitrack acA2040-55um_22657050.pfs</q1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Threshold">
          <q2:ThresholdValue>79</q2:ThresholdValue>
          <q2:MaxValue>255</q2:MaxValue>
          <q2:ThresholdType>BinaryInv</q2:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FindContours">
          <q2:Mode>External</q2:Mode>
          <q2:Method>ChainApproxNone</q2:Method>
          <q2:Offset>
            <q2:X>0</q2:X>
            <q2:Y>0</q2:Y>
          </q2:Offset>
          <q2:MinArea>1000</q2:MinArea>
          <q2:MaxArea>50000</q2:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X,Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="q3:ExpressionTransform">
        <q3:Expression>int32(it)</q3:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="q3:ExpressionTransform">
        <q3:Expression>int32(it)
</q3:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q4:SendMessage">
        <q4:Connection>StimPC</q4:Connection>
        <q4:Address>/is</q4:Address>
      </Expression>
      <Expression xsi:type="q3:PythonTransform">
        <q3:Script>from System import Math, Single

@returns(float)
def process(value):
  if Single.IsNaN(value.X) or Single.IsNaN(value.Y):
    return 0
  return Math.Sqrt(value.X*value.X+value.Y*value.Y)</q3:Script>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Osc.SendMessage, Bonsai.Osc, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Pylon.PylonCapture, Bonsai.Pylon, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.ExpressionTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>